PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant_ID'], expInfo['participant_ID'], expName, expInfo['date'].split('_')[0])
  Experiment info = {'participant_ID': '', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = -1.0000, -1.0000, -1.0000
  expName = products_online
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Welcome
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    TextComponent text_welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!
        This is a decision-making experiment
        Press SPACE to start
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    TextComponent text_instructions
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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      text:
        INSTRUCTIONS:
        Please answer these 3 questions:
        - How much do you LIKE the product?
        - How TASTY do you think the product is?
        - How HEALTHY do you think the product is?

        Rate each question from 0 (not at all) to 7 (very much).

        Use the mouse to move the slider and click to confirm your rating.
        You will have 8 seconds to answer each question.

        Press SPACE to begin the experiment
    KeyboardComponent key_resp_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation
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    TextComponent text_fixation
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine memoryTrial
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    CodeComponent memoryCode
      Code Type = Auto->JS
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      Begin Experiment:
        MEMORY_TRIGGERS = {
            'Tapuchips': 1,
            'Nutella': 1,
            'Cheetos': 1,
            'CocaColaZero': 1,
        }

        memory_counts = {
            'Tapuchips': 0,
            'Nutella': 0,
            'Cheetos': 0,
            'CocaColaZero': 0,
        }
        memory_target_occurrence = {}
        for prod in ['Tapuchips', 'Nutella', 'Cheetos', 'CocaColaZero']:
            memory_target_occurrence[prod] = randint(1, 4)
        all_products = ["Allin", "Cheetos", "ChocolatePara", "CocaColaZero", "Cornflakes", "MangoFree", "Nutella", "Slimdelis", "Tamar", "Tapuchips", "TimTam", "WaffleCrisp", "XL"]
      Begin Routine:
        # count how many times we've seen this product so far
        if product_id in memory_counts:
            memory_counts[product_id] += 1
        thisExp.addData('memory_count_now', memory_counts.get(product_id, ''))
        thisExp.addData('memory_target_now', memory_target_occurrence.get(product_id, ''))

        # choose whether to show the memory trial
        show_memory = False
        memory_correct_product = ""

        # show memory on the randomly chosen occurrence for each trigger product
        if product_id in MEMORY_TRIGGERS:
            if memory_counts[product_id] == memory_target_occurrence[product_id]:
                show_memory = True
                memory_correct_product = product_id

        # skip the routine unless this is a memory trial
        if not show_memory:
            continueRoutine = False
        else:
            wrong_options = random.sample(
                [p for p in all_products if p != memory_correct_product],
                2
            )
            memory_options = wrong_options + [memory_correct_product]
            random.shuffle(memory_options)

            memoryQuestion.text = "Which product was shown in the previous trial?\n\nUse keys 1, 2, or 3 to respond."
            opt1Text.text = "1. " + memory_options[0]
            opt2Text.text = "2. " + memory_options[1]
            opt3Text.text = "3. " + memory_options[2]
      End Routine:
        if show_memory:
            if memoryKey.keys == '1':
                chosen_product = memory_options[0]
            elif memoryKey.keys == '2':
                chosen_product = memory_options[1]
            elif memoryKey.keys == '3':
                chosen_product = memory_options[2]
            else:
                chosen_product = ''

            memory_accuracy = int(chosen_product == memory_correct_product)

            thisExp.addData('memory_correct_product', memory_correct_product)
            thisExp.addData('memory_chosen', chosen_product)
            thisExp.addData('memory_accuracy', memory_accuracy)
            thisExp.addData('memory_RT', memoryKey.rt)
        else:
            thisExp.addData('memory_correct_product', '')
            thisExp.addData('memory_chosen', '')
            thisExp.addData('memory_accuracy', '')
            thisExp.addData('memory_RT', '')
    TextComponent memoryQuestion
      letterHeight = 0.05
      pos = (0, 0.20)
      startVal [time (s)] = 0.0
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      text:
        Which product was shown in the previous trial?

        Use keys 1, 2, or 3 to respond
    TextComponent opt1Text
      letterHeight = 0.03
      pos = (0, 0.05)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent opt2Text
      letterHeight = 0.03
      pos = (0, -0.05)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent opt3Text
      letterHeight = 0.03
      pos = (0, -0.15)
      startVal [time (s)] = 0.0
      text = 3
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    KeyboardComponent memoryKey
      allowedKeys = '1', '2', '3'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ratingTrial
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    CodeComponent ratingCode
      Code Type = Both
      Begin Experiment:
        TIME_LIMIT = 8

        all_questions = [
            ['liking', 'How much do you LIKE the product?'],
            ['taste', 'How TASTY do you think the product is?'],
            ['health', 'How HEALTHY do you think the product is?']
        ]

        SLIDER_MIN = 0
        SLIDER_MAX = 7
        SLIDER_WIDTH = 0.72
        SLIDER_Y = -0.33

        questionClock = core.Clock()
        delayClock = core.Clock()
      Begin JS Experiment:
        TTIME_LIMIT = 8;

        all_questions = [
          ["liking", "How much do you LIKE the product?"],
          ["taste", "How TASTY do you think the product is?"],
          ["health", "How HEALTHY do you think the product is?"]
        ];

        SLIDER_MIN = 0;
        SLIDER_MAX = 7;
        SLIDER_WIDTH = 0.72;
        SLIDER_Y = -0.33;

        questionClock = new util.Clock();
        delayClock = new util.Clock();
      Begin JS Routine:
        // copy and shuffle questions
        questions_list = [...all_questions];

        function shuffleArray(array) {
          for (let i = array.length - 1; i > 0; i--) {
            const j = Math.floor(Math.random() * (i + 1));
            [array[i], array[j]] = [array[j], array[i]];
          }
        }
        shuffleArray(questions_list);

        question_index = 0;
        trial_ratings = {};
        trial_rts = {};
        trial_init = {};

        questionText.text = questions_list[question_index][1];

        // random initial mouse x position along the slider
        start_x = ((Math.random() * SLIDER_WIDTH) - (SLIDER_WIDTH / 2));
        ratingMouse.setPos([start_x, -0.33]);

        // convert initial mouse position to 0-7 value
        init_val = (((start_x + (SLIDER_WIDTH / 2)) / SLIDER_WIDTH) * (SLIDER_MAX - SLIDER_MIN)) + SLIDER_MIN;
        init_val = Math.round(init_val * 10) / 10;
        init_val = Math.min(Math.max(init_val, SLIDER_MIN), SLIDER_MAX);

        ratingSlider.reset();
        ratingSlider.markerPos = init_val;
        ratingValueText.text = `Rating: ${init_val.toFixed(1)}`;

        trial_init[questions_list[question_index][0]] = init_val;

        questionClock.reset();
        click_ready = true;
        waiting_next_question = false;
        normal_delay = 0.5;
        warning_delay = 1.5;
        delay_duration = normal_delay;
        sliderCover.opacity = 0;
        warningText.opacity = 0;
        timeout_warning = false;
      Begin Routine:
        questions_list = all_questions.copy()
        random.shuffle(questions_list)

        question_index = 0
        trial_ratings = {}
        trial_rts = {}
        trial_init = {}

        questionText.text = questions_list[question_index][1]

        # random initial mouse x position along the slider
        start_x = random.uniform(-SLIDER_WIDTH / 2, SLIDER_WIDTH / 2)
        ratingMouse.setPos((start_x, -0.33))

        # convert initial mouse position to 0-7 value
        init_val = ((start_x + SLIDER_WIDTH / 2) / SLIDER_WIDTH) * (SLIDER_MAX - SLIDER_MIN) + SLIDER_MIN
        init_val = round(init_val, 1)
        init_val = min(max(init_val, SLIDER_MIN), SLIDER_MAX)

        ratingSlider.reset()
        ratingSlider.markerPos = init_val
        ratingValueText.text = f"Rating: {init_val:.1f}"

        trial_init[questions_list[question_index][0]] = init_val

        questionClock.reset()
        click_ready = True
        waiting_next_question = False
        normal_delay = 0.5
        warning_delay = 1.5
        delay_duration = normal_delay
        sliderCover.opacity = 0
        warningText.opacity = 0
        timeout_warning = False
      Each Frame:
        # mouse x position
        mouse_x = ratingMouse.getPos()[0]

        # convert mouse position to 0-7 scale
        current_val = ((mouse_x + SLIDER_WIDTH / 2) / SLIDER_WIDTH) * (SLIDER_MAX - SLIDER_MIN) + SLIDER_MIN
        current_val = round(current_val, 1)
        current_val = min(max(current_val, SLIDER_MIN), SLIDER_MAX)

        mouse_pressed = ratingMouse.getPressed()[0]

        # black screen delay between questions
        if waiting_next_question:
            productImage.opacity = 0
            questionText.text = ""
            ratingValueText.text = ""
            leftAnchor.text = ""
            rightAnchor.text = ""
            sliderCover.opacity = 1
            if timeout_warning:
                warningText.opacity = 1
                warningText.text = "Please answer before 8 seconds"
            else:
                warningText.opacity = 0

            if delayClock.getTime() >= delay_duration:
                waiting_next_question = False

                productImage.opacity = 1
                warningText.opacity = 0
                sliderCover.opacity = 0
                leftAnchor.text = "Not at all"
                rightAnchor.text = "Very much"
                questionText.text = questions_list[question_index][1]

                # random initial mouse x position for the new question
                start_x = random.uniform(-SLIDER_WIDTH / 2, SLIDER_WIDTH / 2)
                ratingMouse.setPos((start_x, -0.33))

                init_val = ((start_x + SLIDER_WIDTH / 2) / SLIDER_WIDTH) * (SLIDER_MAX - SLIDER_MIN) + SLIDER_MIN
                init_val = round(init_val, 1)
                init_val = min(max(init_val, SLIDER_MIN), SLIDER_MAX)

                ratingSlider.reset()
                ratingSlider.markerPos = init_val
                ratingValueText.text = f"Rating: {init_val:.1f}"
                trial_init[questions_list[question_index][0]] = init_val

                questionClock.reset()

        # normal question state
        else:
            productImage.opacity = 1
            leftAnchor.text = "Not at all"
            rightAnchor.text = "Very much"

            ratingSlider.markerPos = current_val
            ratingValueText.text = f"Rating: {current_val:.1f}"

            # click confirms current question
                # timeout without response
            if questionClock.getTime() >= TIME_LIMIT:
                q_name = questions_list[question_index][0]
                trial_ratings[q_name] = None
                trial_rts[q_name] = None

                timeout_warning = True
                delay_duration = warning_delay
                question_index += 1

                if question_index >= len(questions_list):
                    continueRoutine = False
                else:
                    waiting_next_question = True
                    delayClock.reset()

            # click confirms current question
            elif mouse_pressed and click_ready:
                click_ready = False

                q_name = questions_list[question_index][0]
                trial_ratings[q_name] = current_val
                trial_rts[q_name] = questionClock.getTime()

                timeout_warning = False
                delay_duration = normal_delay
                question_index += 1

                if question_index >= len(questions_list):
                    continueRoutine = False
                else:
                    waiting_next_question = True
                    delayClock.reset()

        # re-arm click only after mouse is released
        if not mouse_pressed:
            click_ready = True
      Each JS Frame:
        // current slider value from mouse x position
        let mousePos = ratingMouse.getPos();
        let current_x = mousePos[0];

        // clamp x to slider width
        current_x = Math.max((-SLIDER_WIDTH / 2), Math.min((SLIDER_WIDTH / 2), current_x));

        // convert x position to slider value
        let current_val = (((current_x + (SLIDER_WIDTH / 2)) / SLIDER_WIDTH) * (SLIDER_MAX - SLIDER_MIN)) + SLIDER_MIN;
        current_val = Math.round(current_val * 10) / 10;
        current_val = Math.min(Math.max(current_val, SLIDER_MIN), SLIDER_MAX);

        // update slider marker and text
        ratingSlider.markerPos = current_val;
        ratingValueText.text = `Rating: ${current_val.toFixed(1)}`;

        // if time limit reached and no response yet
        if ((questionClock.getTime() >= TTIME_LIMIT) && !timeout_warning) {
            timeout_warning = true;
            warningText.opacity = 1;
            sliderCover.opacity = 1;
            delay_duration = warning_delay;
            click_ready = false;
            waiting_next_question = true;

            // save current response automatically
            trial_ratings[questions_list[question_index][0]] = current_val;
            trial_rts[questions_list[question_index][0]] = questionClock.getTime();
        }

        // after warning delay, move to next question
        if (waiting_next_question && (questionClock.getTime() >= TTIME_LIMIT + delay_duration)) {
            question_index += 1;

            if (question_index >= questions_list.length) {
                continueRoutine = false;
            } else {
                questionText.text = questions_list[question_index][1];

                // random initial mouse x position along the slider
                start_x = ((Math.random() * SLIDER_WIDTH) - (SLIDER_WIDTH / 2));
                ratingMouse.setPos([start_x, -0.33]);

                // convert initial mouse position to 0-7 value
                init_val = (((start_x + (SLIDER_WIDTH / 2)) / SLIDER_WIDTH) * (SLIDER_MAX - SLIDER_MIN)) + SLIDER_MIN;
                init_val = Math.round(init_val * 10) / 10;
                init_val = Math.min(Math.max(init_val, SLIDER_MIN), SLIDER_MAX);

                ratingSlider.reset();
                ratingSlider.markerPos = init_val;
                ratingValueText.text = `Rating: ${init_val.toFixed(1)}`;

                trial_init[questions_list[question_index][0]] = init_val;

                questionClock.reset();
                click_ready = true;
                waiting_next_question = false;
                delay_duration = normal_delay;
                sliderCover.opacity = 0;
                warningText.opacity = 0;
                timeout_warning = false;
            }
        }

        // check for mouse click response
        if (click_ready && ratingMouse.getPressed()[0]) {
            click_ready = false;

            trial_ratings[questions_list[question_index][0]] = current_val;
            trial_rts[questions_list[question_index][0]] = questionClock.getTime();

            sliderCover.opacity = 1;
            waiting_next_question = true;
        }

        // after normal click delay, move to next question
        if (waiting_next_question && !timeout_warning && (questionClock.getTime() >= trial_rts[questions_list[question_index][0]] + normal_delay)) {
            question_index += 1;

            if (question_index >= questions_list.length) {
                continueRoutine = false;
            } else {
                questionText.text = questions_list[question_index][1];

                // random initial mouse x position along the slider
                start_x = ((Math.random() * SLIDER_WIDTH) - (SLIDER_WIDTH / 2));
                ratingMouse.setPos([start_x, -0.33]);

                // convert initial mouse position to 0-7 value
                init_val = (((start_x + (SLIDER_WIDTH / 2)) / SLIDER_WIDTH) * (SLIDER_MAX - SLIDER_MIN)) + SLIDER_MIN;
                init_val = Math.round(init_val * 10) / 10;
                init_val = Math.min(Math.max(init_val, SLIDER_MIN), SLIDER_MAX);

                ratingSlider.reset();
                ratingSlider.markerPos = init_val;
                ratingValueText.text = `Rating: ${init_val.toFixed(1)}`;

                trial_init[questions_list[question_index][0]] = init_val;

                questionClock.reset();
                click_ready = true;
                waiting_next_question = false;
                sliderCover.opacity = 0;
            }
        }
      End JS Routine:
        psychoJS.experiment.addData("liking", trial_ratings["liking"]);
        psychoJS.experiment.addData("liking_initMouse", trial_init["liking"]);
        psychoJS.experiment.addData("liking_RT", trial_rts["liking"]);

        psychoJS.experiment.addData("taste", trial_ratings["taste"]);
        psychoJS.experiment.addData("taste_initMouse", trial_init["taste"]);
        psychoJS.experiment.addData("taste_RT", trial_rts["taste"]);

        psychoJS.experiment.addData("health", trial_ratings["health"]);
        psychoJS.experiment.addData("health_initMouse", trial_init["health"]);
        psychoJS.experiment.addData("health_RT", trial_rts["health"]);
      End Routine:
        thisExp.addData('liking', trial_ratings.get('liking'))
        thisExp.addData('liking_initMouse', trial_init.get('liking'))
        thisExp.addData('liking_RT', trial_rts.get('liking'))

        thisExp.addData('taste', trial_ratings.get('taste'))
        thisExp.addData('taste_initMouse', trial_init.get('taste'))
        thisExp.addData('taste_RT', trial_rts.get('taste'))

        thisExp.addData('health', trial_ratings.get('health'))
        thisExp.addData('health_initMouse', trial_init.get('health'))
        thisExp.addData('health_RT', trial_rts.get('health'))
    ImageComponent productImage
      image [set every repeat] = $image_path
      pos = (0, 0.14)
      size = (0.60, 0.60)
      startVal [time (s)] = 0.0
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    TextComponent questionText
      letterHeight = 0.035
      pos = (0, -0.22)
      startVal [time (s)] = 0.0
      text = placeholder
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    TextComponent ratingValueText
      letterHeight = 0.028
      pos = (0, -0.26)
      startVal [time (s)] = 0.0
      text = Rating:
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    SliderComponent ratingSlider
      fillColor = 1.0000, 1.0000, 1.0000
      font = Noto Sans
      forceEndRoutine = False
      granularity = 0.1
      labels = 0,1,2,3,4,5,6,7
      letterHeight = 0.04
      pos = (0, -0.33)
      size = (0.7, 0.05)
      startVal [time (s)] = 0.0
      styles = slider
      ticks = (0, 1, 2, 3, 4, 5, 6, 7)
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    PolygonComponent sliderCover
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = black
      pos = (0, -0.36)
      shape = rectangle
      size = (0.80, 0.18)
      startVal [time (s)] = 0.0
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    MouseComponent ratingMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    TextComponent leftAnchor
      letterHeight = 0.022
      pos = (-0.35, -0.44)
      startVal [time (s)] = 0.0
      text = Not at all
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    TextComponent rightAnchor
      letterHeight = 0.022
      pos = (0.35, -0.44)
      startVal [time (s)] = 0.0
      text = Very much
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    TextComponent warningText
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Please answer before 8 seconds
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  Routine setOrder
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    CodeComponent code_serOrder
      Code Type = Both
      Begin JS Routine:
        all_trials = TrialHandler.importConditions(psychoJS.serverManager, 'image_table.csv');
        row_order = [...Array(all_trials.length).keys()];

        function shuffleArray(array) {
          for (let i = array.length - 1; i > 0; i--) {
            const j = Math.floor(Math.random() * (i + 1));
            [array[i], array[j]] = [array[j], array[i]];
          }
        }

        let valid_order = false;
        while (!valid_order) {
          shuffleArray(row_order);
          valid_order = true;
          for (let i = 0; i < row_order.length - 1; i++) {
            if (all_trials[row_order[i]]["product_id"] === all_trials[row_order[i + 1]]["product_id"]) {
              valid_order = false;
              break;
            }
          }
        }

        selected_rows_str = row_order.join(",");
        continueRoutine = false;
      Begin Routine:
        all_trials = data.importConditions('image_table.csv')
        row_order = list(range(len(all_trials)))

        valid_order = False
        while not valid_order:
            shuffle(row_order)
            valid_order = True
            for i in range(len(row_order) - 1):
                if all_trials[row_order[i]]['product_id'] == all_trials[row_order[i + 1]]['product_id']:
                    valid_order = False
                    break

        selected_rows_str = ",".join([str(i) for i in row_order])
        continueRoutine = False
  Routine thanks
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    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thank you!
        Press SPACE to exit.
    KeyboardComponent endKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine participantInfo
    CodeComponent infoCode
      Code Type = Auto->JS
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      Begin Routine:
        stage = 'id'
        current_text = ''

        entryPrompt.text = 'Participant ID:'
        entryText.text = '_'

        infoWarning.opacity = 0
      Each Frame:
        keys = entryKeys.getKeys(waitRelease=False)

        for key in keys:
            k = key.name

            if k == 'return':
                if stage == 'id':
                    if current_text.strip() != '':
                        expInfo['participant_ID'] = current_text.strip()
                        stage = 'age'
                        current_text = ''
                        entryPrompt.text = 'Age:'
                        entryText.text = '_'
                        infoWarning.opacity = 0
                    else:
                        infoWarning.text = 'Please enter a participant ID'
                        infoWarning.opacity = 1

                elif stage == 'age':
                    if current_text.isdigit():
                        expInfo['age'] = current_text
                        continueRoutine = False
                    else:
                        infoWarning.text = 'Please enter a valid numeric age'
                        infoWarning.opacity = 1

            elif k == 'backspace':
                current_text = current_text[:-1]
                entryText.text = current_text + '_'

            elif k == 'space':
                if stage == 'id':
                    current_text += ' '
                    entryText.text = current_text + '_'

            elif len(k) == 1:
                if stage == 'id':
                    current_text += k
                    entryText.text = current_text + '_'
                elif stage == 'age' and k.isdigit():
                    current_text += k
                    entryText.text = current_text + '_'
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    TextComponent infoTitle
      letterHeight = 0.05
      pos = (0, 0.30)
      startVal [time (s)] = 0.0
      text = Please enter your participant ID and age
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    TextComponent entryPrompt
      letterHeight = 0.05
      pos = (0, 0.08)
      startVal [time (s)] = 0.0
      text = Participant ID:
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    TextComponent entryText
      letterHeight = 0.05
      pos = (0, -0.02)
      startVal [time (s)] = 0.0
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    TextComponent infoWarning
      color = red
      letterHeight = 0.03
      pos = (0, -0.22)
      startVal [time (s)] = 0.0
      text = Please enter a valid participant ID and a numeric age
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    KeyboardComponent entryKeys
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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Flow
  Routine Welcome
  Routine instructions
  Routine setOrder
  LoopInitiator main_loop loopType="TrialHandler"
    Selected rows = $selected_rows_str
    conditionsFile = image_table.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('product_id', 'Allin'), ('version', 'original'), ('image_path', 'taste&health/Allin_original.png')]),
      OrderedDict([('product_id', 'Allin'), ('version', 'taste'), ('image_path', 'taste&health/Allin_taste.png')]),
      OrderedDict([('product_id', 'Allin'), ('version', 'health'), ('image_path', 'taste&health/Allin_health.png')]),
      OrderedDict([('product_id', 'Cheetos'), ('version', 'original'), ('image_path', 'taste&health/Cheetos_original.png')]),
      OrderedDict([('product_id', 'Cheetos'), ('version', 'taste'), ('image_path', 'taste&health/Cheetos_taste.png')]),
      OrderedDict([('product_id', 'Cheetos'), ('version', 'health'), ('image_path', 'taste&health/Cheetos_health.png')]),
      OrderedDict([('product_id', 'ChocolatePara'), ('version', 'original'), ('image_path', 'taste&health/ChocolatePara_original.png')]),
      OrderedDict([('product_id', 'ChocolatePara'), ('version', 'taste'), ('image_path', 'taste&health/ChocolatePara_taste.png')]),
      OrderedDict([('product_id', 'ChocolatePara'), ('version', 'health'), ('image_path', 'taste&health/ChocolatePara_health.png')]),
      OrderedDict([('product_id', 'CocaColaZero'), ('version', 'original'), ('image_path', 'taste&health/CocaColaZero_original.png')]),
      OrderedDict([('product_id', 'CocaColaZero'), ('version', 'taste'), ('image_path', 'taste&health/CocaColaZero_taste.png')]),
      OrderedDict([('product_id', 'CocaColaZero'), ('version', 'health'), ('image_path', 'taste&health/CocaColaZero_health.png')])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
    Routine fixation
    Routine ratingTrial
    Routine memoryTrial
  LoopTerminator main_loop
  Routine thanks
